input = getDirectory("Choose source directory of the macro (Scripts for Auto Cell Count)");
print(input);

File.setDefaultDir(input);
print(File.getDefaultDir);


exec("python", input + "file_architect.py");

//TODO figure out bean shell calling
//runMacro(input + "BS_TWS_apply.bsh");

// TODO Check if can run without projected images
searchDirectory = input
Dialog.create("Example Dialog");
Dialog.addCheckbox("Do you need to project multiple image segmentations?", false);
Dialog.show();
result = Dialog.getCheckbox();
if (result) {
	exec("python", input + "Project N Images by ID.py", input);
	searchDirectory = input + "../training_area/Weka_Output_Projected/";
} else {
	searchDirectory = input + "../training_area/Weka_Output_Thresholded/";
}

// Run ImageJ macros
runMacro(input + "just_thresh.ijm", input);
runMacro(input + "count_from_roi.ijm", input);
runMacro(input + "count_over_dir.ijm", searchDirectory);

y = input + "test.py";
z = input + "classifier_comparison.py";

print(y);
// Next, run classifier comparison
//exec("python", y);
exec("python", z, input);
print("finished pipeline");